# 1 "/opt/topspin3.6.2/exp/stan/nmr/lists/pp/user/hahnecho.etba"
;hahnecho
;
;
;TS3 / 03.06.2011
;
;checked by SEWE 03.06.2011
;
; Hahn-Echo experiment
; to be used in MAS experiments, echo delay is set to be an integer number
; of rotor periods
; acquisition starts immediately after 180 degree pulse to be able to sample whole echo
; for short echo delays set parameter nsp equal to number of points before echo-top
; in this case use digmod analog or digmod digital and dspfirm smooth
; for full echo accumulation digmod digital and dspfirm sharp can also be used
; set phc0=0 and phc1=d6*swh*360 and do straight fp, sine bell or squared sine bell
; window functions may be used
; for static experiments enter cnst31 = 1e6 and set l1 to desired echo delay in us
;
;
;parameters:
;pl1 : RF power level for 90/180
;p1 : 90 degree pulse
;p2 : =p1*2, 180 degree pulse
;d1 : recycle delay
;d6 : echo delay (calculated)
;cnst31 : =MAS spin rate (or =1e6 for static)
;l1 : # of rotor cycles (or tau in us)
;ns : 16*n
;zgoptns : -Ddec (if decoupling desired) or blank
;
;
;$CLASS=Solids
;$DIM=1D
;$TYPE=direct excitation
;$SUBTYPE=simple 1D
;$COMMENT=Hahn-Echo experiment, MAS or static, standard parameters

prosol relations=<solids_default>

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"p2=p1*2"
"d6=((1s*l1)/cnst31)-(p1/2)-(p2/2)"
;cnst11 : to adjust t=0 for acquisition, if digmod = baseopt
"acqt0=0"


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;=============================
; Include files
;=============================
;#include <Avance.incl>
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;Avancesolids.incl
;   for TCU3
;
;version 1 28.2.2001, written by HF
;	   4.4.2006, complemented by Ste

;$CLASS=Solids INCL
;$COMMENT=definitions for setrtp and setnmr

;switch between 1H or 19F output (H amplifier) 
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;gating pulse for RX, ADC and HPPR auto mode


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;explicit blanking of preamp, receiver, adc, not implemented yet


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;generate dwell clock


;turn dwell clock on/off
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;


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;define data sampling for WAHUHA type experiments, samples analogue or digitally for d9, closes receiver


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;explicit transmitter blanking, not supported yet

;NCO switching, to be implemented

;$Id: Avancesolids.incl,v 1.8.2.1 2017/02/22 17:02:01 ber Exp $
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
;=============================
; End Include files
;=============================

;=============================
; Protection
;=============================
1m
  if "p15    > 10100"   goto Problem
  if "p16    > 10100"   goto Problem
;  if "aq     > 50m"    goto Problem
  if "d1     < 0.1s"    goto Problem
;  if "d20     < 1ms"    goto Problem
  goto PassParams
Problem, 1m
  print "Parameters p15, p16, aq, d1 or d20 out of range, ending."
  goto HaltAcqu
PassParams, 1m
;=============================
; End Protection
;=============================
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; dimension 1D; AQ_mode 
define delay MCWRK
define delay MCREST
"MCREST = 10m - 10m"
"MCWRK = 0.333333*10m"

    dccorr
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1 ze
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2 MCWRK  * 2
LBLF0, MCWRK
  MCREST
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  d1

  (p1 pl1 ph1):f1

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  d6

  (p2 ph2):f1
  d6
  go=2 ph31

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  MCWRK wr #0
  MCWRK zd
  lo to LBLF0 times td0

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HaltAcqu, 1m
exit

ph0=0
ph1=0 1 2 3
ph2=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph30=0
ph31=0 3 2 1 2 1 0 3

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;$Id: hahnecho,v 1.6.2.1 2017/02/22 17:02:21 ber Exp $
