# 1 "/opt/topspin3.6.2/exp/stan/nmr/lists/pp/user/noesyph_echo.etba"
;noesyph
;avance-version (12/01/11)
;2D homonuclear correlation via dipolar coupling 
;dipolar coupling may be due to noe or chemical exchange.
;phase sensitive
;modified from noesyph.towi by etba on 07.03.23 by adding an echo after the noesy block. Last echo delay accounts for the maximum echo position.
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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"in0=inf1"

"d0=0.1u"

"acqt0=-p1*2/3.1416"
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;=============================
; Include files
;=============================
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
;#include <Avancesolids.incl>
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
;=============================
; End Include files
;=============================

;=============================
; Protection
;=============================
1m
  if "p15    > 10100"   goto Problem
  if "p16    > 10100"   goto Problem
;  if "aq     > 50m"    goto Problem
  if "d1     < 0.1s"    goto Problem
;  if "d20     < 1ms"    goto Problem
  goto PassParams
Problem, 1m
  print "Parameters p15, p16, aq, d1 or d20 out of range, ending."
  goto HaltAcqu
PassParams, 1m
;=============================
; End Protection
;=============================
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; dimension 2D; AQ_mode  (F1) States-TPPI
define delay MCWRK
define delay MCREST
define delay d0orig
"d0orig=d0"
define loopcounter t1loop
"t1loop=0"
define loopcounter ph1loop
"ph1loop=0"
define loopcounter ST1CNT
"ST1CNT = trunc(td1 / 2)"
"MCREST = d1 - d1"
"MCWRK = 0.200000*d1"

    dccorr
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1 ze
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LBLAV, MCWRK
      "d0=d0orig + t1loop * in0 "
      "phval1 = (ph1loop % 4) * 90"
      MCWRK ip1 + phval1
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2 MCWRK  * 2
LBLF1, MCWRK  * 2
LBLST1, MCWRK
  MCREST
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3 p1 ph1
  d0
  p1 ph2
  d8
  p1 ph3
	d6
	p2 ph4
	d7
  go=2 ph31
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  MCWRK  wr #0 if #0 zd 

  "ph1loop+=1"
      "d0=d0orig + t1loop * in0 "
      "phval1 = (ph1loop % 4) * 90"
      MCWRK ip1 + phval1
  lo to LBLF1 times 2
  MCWRK 

  "t1loop+=1"
      "d0=d0orig + t1loop * in0 "
      "phval1 = (ph1loop % 4) * 90"
      MCWRK ip1 + phval1
  lo to LBLST1 times ST1CNT
  MCWRK 
  "t1loop=0"
  "ph1loop=0"
  MCWRK rf #0
  lo to LBLAV times tdav
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HaltAcqu, 1m
exit


ph1=0 2 
ph2=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph3=0 0 2 2 1 1 3 3
ph4=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph31=0 2 2 0 1 3 3 1 2 0 0 2 3 1 1 3
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;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;d0 : incremented delay (2D)
;d1 : relaxation delay; 1-5 * T1
;d8 : mixing time
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 8 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ


;Processing
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;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1


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;$Id: noesyph,v 1.9 2012/01/31 17:49:28 ber Exp $
